PsychoPy2experiment version="2024.1.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['color.xlsx', 'cond.xlsx', 'color_exp.xlsx', 'meaning_exp.xlsx', 'meaning.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = stroop
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent instruct
      font = STSong
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 10
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      text:
        欢迎参加本实验，在本实验中，您需要按F/J键做出反应

        有时候，您需要对词汇的颜色做出反应，其他时候，您需要对词汇本身做出反应；

        按空格键继续
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if cr1 == "X":
            infor_out = "刚刚的字词没有指向某个性别，没有正确答案；您按第一反应按键即可"
        else:
            infor_out = "您刚刚需要按"+cr1+"\n因为这是一个"+colorChinese1+"的刺激"
    TextComponent text_4
      font = STSong
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $infor_out
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine fixation
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    TextComponent text_7
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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  Routine begining_info
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    TextComponent text_8
      font = STSong
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $"本轮正式实验开始\n"+"(请对"+aim+"做出反应）"
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine opening
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    TextComponent text_2
      font = STSong
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 10
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      text:
        在接下的实验中，您将看到一些词汇，请您对词汇的颜色或含义做出反应；
        我们会在每一轮实验开始前告知您需要对颜色还是含义做出反应


        请在尽量准确的情况下，做出最快速的反应
        反应速率与准确率综合权衡后，表现最佳者将获得额外的40元奖励

        按空格键继续
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if aim == "颜色":
            output = "本轮实验涉及到A,F,J,L四个按键；\n\n对于黑色字词请按A；\n对于蓝色字词请按F；\n对于粉色字词请按J；\n对于紫色字词请按L\n请将左手放置在键盘左侧以便按A键与F键，\n将右手放置在键盘右侧以便按J键与L键"
        else:
            output = "你认为这个字词描述男性，则请按F；\n你认为这个字词描述女性，则请按J"
    TextComponent text_6
      font = STSong
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $"接下来您需要对"+aim+"做出反应\n"+output+"\n\n首先，我们进行练习\n按空格键继续"
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_trials
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if aim == "颜色":
           hint = "A 黑色；F 蓝色；J 粉色；L 紫色\n请尽量熟记各个颜色对应的按钮，在正式实验中不会呈现该提示"
        else:
           hint = ""
    TextComponent text_3
      color [set every repeat] = $color1
      font = STSong
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $content1
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    TextComponent text_9
      font = STSong
      letterHeight = 0.03
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $hint
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    KeyboardComponent key_resp_5
      correctAns = $cr1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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  Routine experiment_trials
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    TextComponent text
      color [set every repeat] = $color
      font = STSong
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $content
      wrapWidth = 5
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    KeyboardComponent key_resp_2
      allowedKeys = 'a','f','j','l'
      correctAns = $ca
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine Finish_word
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    TextComponent text_5
      font = STSong
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        感谢您的参与！

        按任意键结束，结束后会出现灰屏，关闭该页面即可

        以及请务必回到前一个网页点击“确定”，
        否则您刚刚的实验数据将无法被保存，
        也无法参与我们的后续抽奖环节。
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine warning
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    TextComponent text_10
      font = STSong
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        实验开始前，请您确定

        1. 使用电脑（非手机、平板）作答
        2. 在电脑浏览器（chrome, edge, safari或国产浏览器）中作答
        而非直接在微信/qq的弹出窗口中作答

        否则我们将无法收集到本次实验的数据

        按任意键继续
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Error_warn
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    TextComponent text_11
      font = STSong
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 未作答，请认真参与！
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Flow
  Routine warning
  Routine opening
  LoopInitiator randomizer loopType="TrialHandler"
    conditionsFile = random_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'practice': 'color.xlsx', 'experiment': 'color_exp.xlsx', 'aim': '颜色'},
      {'practice': 'meaning.xlsx', 'experiment': 'meaning_exp.xlsx', 'aim': '含义'}]
    Routine instruction
    LoopInitiator practice_loop loopType="TrialHandler"
      conditionsFile = $practice
      loopType = fullRandom
      nReps = 2
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      Routine fixation
      Routine practice_trials
      Routine feedback
    LoopTerminator practice_loop
    Routine begining_info
    LoopInitiator experiment_loop loopType="TrialHandler"
      conditionsFile = $experiment
      loopType = fullRandom
      nReps = 1
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      Routine fixation
      Routine experiment_trials
    LoopTerminator experiment_loop
  LoopTerminator randomizer
  Routine Finish_word
